# Generated by Configurator on Fri Dec 02 16:42:53 EST 2016

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM4,SerialManager,COM4
Device,OlympusHub,Olympus,OlympusHub
Device,Objective,Olympus,Objective
Device,LightPath,Olympus,LightPath
Device,FilterCube,Olympus,FilterCube
Device,TransmittedLamp,Olympus,TransmittedLamp
Device,ManualFocus,Olympus,ManualFocus
Device,Wheel-A,SutterLambda,Wheel-A
Device,Wheel-C,SutterLambda,Wheel-C
Device,Shutter-A,SutterLambda,Shutter-A
Device,Shutter-B,SutterLambda,Shutter-B
Device,Cascade,PVCAM,Camera-1
Device,IDS uEye,IDS_uEye,IDS uEye

# Pre-init settings for devices
Property,OlympusHub,Port,COM4
Property,Wheel-A,Port,COM6
Property,Wheel-A,Timeout(ms),500
Property,Wheel-C,Port,COM6
Property,Wheel-C,Timeout(ms),500
Property,Shutter-A,Port,COM6
Property,Shutter-B,Port,COM6

# Pre-init settings for COM ports
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,128000
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,19200
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,Even
Property,COM4,StopBits,2
Property,COM4,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ManualFocus,0

# Roles
Property,Core,Camera,Cascade
Property,Core,Shutter,Shutter-A
Property,Core,Focus,ManualFocus
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# Objective
Label,Objective,5,Position-6
Label,Objective,4,Position-5
Label,Objective,3,Position-4
Label,Objective,2,Position-3
Label,Objective,1,Position-2
Label,Objective,0,Position-1
# LightPath
Label,LightPath,1,Side Port
Label,LightPath,0,Eye
# FilterCube
Label,FilterCube,5,Position-6
Label,FilterCube,4,Position-5
Label,FilterCube,3,Position-4
Label,FilterCube,2,Position-3
Label,FilterCube,1,Position-2
Label,FilterCube,0,Position-1
# TransmittedLamp
Label,TransmittedLamp,1,On
Label,TransmittedLamp,0,Off
# Wheel-A
Label,Wheel-A,9,Filter-9
Label,Wheel-A,8,Filter-8
Label,Wheel-A,7,Filter-7
Label,Wheel-A,6,Filter-6
Label,Wheel-A,5,Filter-5
Label,Wheel-A,4,Filter-4
Label,Wheel-A,3,Filter-3
Label,Wheel-A,2,Filter-2
Label,Wheel-A,1,Filter-1
Label,Wheel-A,0,Filter-0
# Wheel-C
Label,Wheel-C,9,Filter-9
Label,Wheel-C,8,Filter-8
Label,Wheel-C,7,Filter-7
Label,Wheel-C,6,Filter-6
Label,Wheel-C,5,Filter-5
Label,Wheel-C,4,Filter-4
Label,Wheel-C,3,Filter-3
Label,Wheel-C,2,Filter-2
Label,Wheel-C,1,Filter-1
Label,Wheel-C,0,Filter-0

# Configuration presets
# Group: IR_fluorescent
# Preset: Cascade_fluorescent
ConfigGroup,IR_fluorescent,Cascade_fluorescent,Core,Shutter,Shutter-A
ConfigGroup,IR_fluorescent,Cascade_fluorescent,Core,AutoShutter,1

# Preset: IDS uEye_IR
ConfigGroup,IR_fluorescent,IDS uEye_IR,Core,Shutter,Shutter-B
ConfigGroup,IR_fluorescent,IDS uEye_IR,Core,AutoShutter,0


# Group: Channel

# Group: YFP_BF
# Preset: BF_transmitted
ConfigGroup,YFP_BF,BF_transmitted,OlympusHub,Control,Manual + Computer
ConfigGroup,YFP_BF,BF_transmitted,TransmittedLamp,Voltage,2.7000
ConfigGroup,YFP_BF,BF_transmitted,Wheel-A,Label,Filter-5
ConfigGroup,YFP_BF,BF_transmitted,Wheel-A,State,5
ConfigGroup,YFP_BF,BF_transmitted,Wheel-C,Label,Filter-3
ConfigGroup,YFP_BF,BF_transmitted,Wheel-C,State,3
ConfigGroup,YFP_BF,BF_transmitted,Core,Shutter,Shutter-B
ConfigGroup,YFP_BF,BF_transmitted,FilterCube,Label,Position-3
ConfigGroup,YFP_BF,BF_transmitted,FilterCube,State,2

# Preset: YFP_Excitation
ConfigGroup,YFP_BF,YFP_Excitation,OlympusHub,Control,Manual + Computer
ConfigGroup,YFP_BF,YFP_Excitation,TransmittedLamp,Voltage,2.9000
ConfigGroup,YFP_BF,YFP_Excitation,Wheel-A,Label,Filter-3
ConfigGroup,YFP_BF,YFP_Excitation,Wheel-A,State,3
ConfigGroup,YFP_BF,YFP_Excitation,Wheel-C,Label,Filter-3
ConfigGroup,YFP_BF,YFP_Excitation,Wheel-C,State,3
ConfigGroup,YFP_BF,YFP_Excitation,Core,Shutter,Shutter-A
ConfigGroup,YFP_BF,YFP_Excitation,FilterCube,Label,Position-3
ConfigGroup,YFP_BF,YFP_Excitation,FilterCube,State,2


# Group: System
# Preset: Startup


# Group: GFP_RFP_BF
# Preset: BF
ConfigGroup,GFP_RFP_BF,BF,OlympusHub,Control,Manual + Computer
ConfigGroup,GFP_RFP_BF,BF,FilterCube,Label,Position-4
ConfigGroup,GFP_RFP_BF,BF,FilterCube,State,3
ConfigGroup,GFP_RFP_BF,BF,TransmittedLamp,Voltage,4.1000
ConfigGroup,GFP_RFP_BF,BF,ManualFocus,FarLimit,20.0000
ConfigGroup,GFP_RFP_BF,BF,Wheel-A,Label,Filter-4
ConfigGroup,GFP_RFP_BF,BF,Wheel-A,State,4
ConfigGroup,GFP_RFP_BF,BF,Wheel-C,Label,Filter-1
ConfigGroup,GFP_RFP_BF,BF,Wheel-C,State,1
ConfigGroup,GFP_RFP_BF,BF,Cascade,ClearMode,Pre-Sequence
ConfigGroup,GFP_RFP_BF,BF,Cascade,MultiplierGain,1
ConfigGroup,GFP_RFP_BF,BF,Cascade,Offset,275
ConfigGroup,GFP_RFP_BF,BF,Core,Shutter,Shutter-B
ConfigGroup,GFP_RFP_BF,BF,Cascade,ReadoutRate,10MHz 16bit

# Preset: RFP_60x
ConfigGroup,GFP_RFP_BF,RFP_60x,OlympusHub,Control,Manual + Computer
ConfigGroup,GFP_RFP_BF,RFP_60x,FilterCube,Label,Position-4
ConfigGroup,GFP_RFP_BF,RFP_60x,FilterCube,State,3
ConfigGroup,GFP_RFP_BF,RFP_60x,TransmittedLamp,Voltage,4.3000
ConfigGroup,GFP_RFP_BF,RFP_60x,ManualFocus,FarLimit,20.0000
ConfigGroup,GFP_RFP_BF,RFP_60x,Wheel-A,Label,Filter-6
ConfigGroup,GFP_RFP_BF,RFP_60x,Wheel-A,State,6
ConfigGroup,GFP_RFP_BF,RFP_60x,Wheel-C,Label,Filter-4
ConfigGroup,GFP_RFP_BF,RFP_60x,Wheel-C,State,4
ConfigGroup,GFP_RFP_BF,RFP_60x,Cascade,ClearMode,Pre-Sequence
ConfigGroup,GFP_RFP_BF,RFP_60x,Cascade,MultiplierGain,3900
ConfigGroup,GFP_RFP_BF,RFP_60x,Cascade,Offset,274
ConfigGroup,GFP_RFP_BF,RFP_60x,Core,Shutter,Shutter-A
ConfigGroup,GFP_RFP_BF,RFP_60x,Cascade,ReadoutRate,10MHz 16bit

# Preset:  GFP
ConfigGroup,GFP_RFP_BF, GFP,OlympusHub,Control,Manual + Computer
ConfigGroup,GFP_RFP_BF, GFP,FilterCube,Label,Position-4
ConfigGroup,GFP_RFP_BF, GFP,FilterCube,State,3
ConfigGroup,GFP_RFP_BF, GFP,TransmittedLamp,Voltage,4.3000
ConfigGroup,GFP_RFP_BF, GFP,ManualFocus,FarLimit,20.0000
ConfigGroup,GFP_RFP_BF, GFP,Wheel-A,Label,Filter-4
ConfigGroup,GFP_RFP_BF, GFP,Wheel-A,State,4
ConfigGroup,GFP_RFP_BF, GFP,Wheel-C,Label,Filter-3
ConfigGroup,GFP_RFP_BF, GFP,Wheel-C,State,3
ConfigGroup,GFP_RFP_BF, GFP,Cascade,ClearMode,Pre-Sequence
ConfigGroup,GFP_RFP_BF, GFP,Cascade,MultiplierGain,3824
ConfigGroup,GFP_RFP_BF, GFP,Cascade,Offset,261
ConfigGroup,GFP_RFP_BF, GFP,Core,Shutter,Shutter-A
ConfigGroup,GFP_RFP_BF, GFP,Cascade,ReadoutRate,10MHz 16bit


# Group: CFP_YFP_BF
# Preset: BF
ConfigGroup,CFP_YFP_BF,BF,OlympusHub,Control,Manual + Computer
ConfigGroup,CFP_YFP_BF,BF,FilterCube,Label,Position-3
ConfigGroup,CFP_YFP_BF,BF,FilterCube,State,2
ConfigGroup,CFP_YFP_BF,BF,ManualFocus,FarLimit,0.0100
ConfigGroup,CFP_YFP_BF,BF,ManualFocus,FocusSensitivity,100
ConfigGroup,CFP_YFP_BF,BF,ManualFocus,FocusWheel,Off
ConfigGroup,CFP_YFP_BF,BF,ManualFocus,NearLimit,30000.0000
ConfigGroup,CFP_YFP_BF,BF,Wheel-A,Busy,0
ConfigGroup,CFP_YFP_BF,BF,Wheel-A,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,BF,Wheel-A,Label,Filter-8
ConfigGroup,CFP_YFP_BF,BF,Wheel-A,Speed,3
ConfigGroup,CFP_YFP_BF,BF,Wheel-A,State,8
ConfigGroup,CFP_YFP_BF,BF,Wheel-C,Busy,0
ConfigGroup,CFP_YFP_BF,BF,Wheel-C,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,BF,Wheel-C,Label,Filter-3
ConfigGroup,CFP_YFP_BF,BF,Wheel-C,Speed,3
ConfigGroup,CFP_YFP_BF,BF,Wheel-C,State,3
ConfigGroup,CFP_YFP_BF,BF,Shutter-A,Mode,Fast
ConfigGroup,CFP_YFP_BF,BF,Cascade,ClearMode,Pre-Sequence
ConfigGroup,CFP_YFP_BF,BF,Cascade,Exposure,10.0000
ConfigGroup,CFP_YFP_BF,BF,Cascade,MultiplierGain,1
ConfigGroup,CFP_YFP_BF,BF,Cascade,Port,Multiplication Gain
ConfigGroup,CFP_YFP_BF,BF,Core,Shutter,Shutter-B
ConfigGroup,CFP_YFP_BF,BF,Cascade,ReadoutRate,5MHz 16bit

# Preset: YFPx YFPm 
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,OlympusHub,Control,Manual + Computer
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,FilterCube,Label,Position-3
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,FilterCube,State,2
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,ManualFocus,FarLimit,0.0100
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,ManualFocus,FocusSensitivity,100
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,ManualFocus,FocusWheel,Off
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,ManualFocus,NearLimit,30000.0000
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-A,Busy,0
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-A,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-A,Label,Filter-5
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-A,Speed,3
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-A,State,5
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-C,Busy,0
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-C,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-C,Label,Filter-3
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-C,Speed,3
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-C,State,3
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Shutter-A,Mode,Fast
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Cascade,ClearMode,Pre-Sequence
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Cascade,Exposure,10.0000
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Cascade,Port,Multiplication Gain
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Cascade,MultiplierGain,3900
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Core,Shutter,Shutter-A
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Cascade,ReadoutRate,5MHz 16bit

# Preset: CFPx CFPm
ConfigGroup,CFP_YFP_BF,CFPx CFPm,OlympusHub,Control,Manual + Computer
ConfigGroup,CFP_YFP_BF,CFPx CFPm,FilterCube,Label,Position-3
ConfigGroup,CFP_YFP_BF,CFPx CFPm,FilterCube,State,2
ConfigGroup,CFP_YFP_BF,CFPx CFPm,ManualFocus,FarLimit,0.0100
ConfigGroup,CFP_YFP_BF,CFPx CFPm,ManualFocus,FocusSensitivity,100
ConfigGroup,CFP_YFP_BF,CFPx CFPm,ManualFocus,FocusWheel,Off
ConfigGroup,CFP_YFP_BF,CFPx CFPm,ManualFocus,NearLimit,30000.0000
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-A,Busy,0
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-A,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-A,Label,Filter-8
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-A,Speed,3
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-A,State,8
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-C,Busy,0
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-C,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-C,Label,Filter-5
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-C,Speed,3
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-C,State,5
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Shutter-A,Mode,Fast
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Cascade,ClearMode,Pre-Sequence
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Cascade,Exposure,10.0000
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Cascade,Port,Multiplication Gain
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Cascade,MultiplierGain,3900
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Core,Shutter,Shutter-A
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Cascade,ReadoutRate,5MHz 16bit

# Preset: CFPx YFPm
ConfigGroup,CFP_YFP_BF,CFPx YFPm,OlympusHub,Control,Manual + Computer
ConfigGroup,CFP_YFP_BF,CFPx YFPm,FilterCube,Label,Position-3
ConfigGroup,CFP_YFP_BF,CFPx YFPm,FilterCube,State,2
ConfigGroup,CFP_YFP_BF,CFPx YFPm,ManualFocus,FarLimit,0.0100
ConfigGroup,CFP_YFP_BF,CFPx YFPm,ManualFocus,FocusSensitivity,100
ConfigGroup,CFP_YFP_BF,CFPx YFPm,ManualFocus,FocusWheel,Off
ConfigGroup,CFP_YFP_BF,CFPx YFPm,ManualFocus,NearLimit,30000.0000
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-A,Busy,0
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-A,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-A,Label,Filter-8
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-A,Speed,3
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-A,State,8
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-C,Busy,0
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-C,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-C,Label,Filter-3
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-C,Speed,3
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-C,State,3
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Shutter-A,Mode,Fast
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Cascade,ClearMode,Pre-Sequence
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Cascade,Exposure,10.0000
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Cascade,Port,Multiplication Gain
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Cascade,MultiplierGain,3900
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Core,Shutter,Shutter-A
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Cascade,ReadoutRate,5MHz 16bit


# Group: Brightfield_epi_CFPYFP
# Preset: CFP
ConfigGroup,Brightfield_epi_CFPYFP,CFP,OlympusHub,Control,Manual + Computer
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Wheel-A,Label,Filter-8
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Wheel-A,State,8
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Wheel-C,Label,Filter-1
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Wheel-C,State,1
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Shutter-A,State,1
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Shutter-B,State,0
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Cascade,Exposure,200.0000
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Cascade,MultiplierGain,3900

# Preset: Brightfield
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,OlympusHub,Control,Manual + Computer
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Wheel-A,Label,Filter-8
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Wheel-A,State,8
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Wheel-C,Label,Filter-1
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Wheel-C,State,1
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Shutter-A,State,0
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Shutter-B,State,1
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Cascade,Exposure,200.0000
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Cascade,MultiplierGain,3900



# PixelSize settings

