# Generated by Configurator on Thu Jan 19 11:00:32 EST 2017

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM3,SerialManager,COM3
Device,COM17,SerialManager,COM17
Device,COM4,SerialManager,COM4
Device,OlympusHub,Olympus,OlympusHub
Device,Objective,Olympus,Objective
Device,LightPath,Olympus,LightPath
Device,FilterCube,Olympus,FilterCube
Device,TransmittedLamp,Olympus,TransmittedLamp
Device,ManualFocus,Olympus,ManualFocus
Device,Wheel-A,SutterLambda,Wheel-A
Device,Wheel-C,SutterLambda,Wheel-C
Device,Shutter-A,SutterLambda,Shutter-A
Device,Shutter-B,SutterLambda,Shutter-B
Device,Cascade,PVCAM,Camera-1
Device,AAAOTF,AAAOTF,AAAOTF
Device,ETL_1,UserDefinedSerial,UserDefinedStateDevice

# Pre-init settings for devices
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,128000
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM17,AnswerTimeout,500.0000
Property,COM17,BaudRate,9600
Property,COM17,DelayBetweenCharsMs,0.0000
Property,COM17,Handshaking,Off
Property,COM17,Parity,None
Property,COM17,StopBits,1
Property,COM17,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,19200
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,Even
Property,COM4,StopBits,2
Property,COM4,Verbose,1
Property,OlympusHub,Port,COM4
Property,Wheel-A,Port,COM6
Property,Wheel-A,Timeout(ms),500
Property,Wheel-C,Port,COM6
Property,Wheel-C,Timeout(ms),500
Property,Shutter-A,Port,COM6
Property,Shutter-B,Port,COM6
Property,AAAOTF,Port,COM17
Property,ETL_1,Command mode,Binary
Property,ETL_1,Initialize-command,
Property,ETL_1,Initialize-response,
Property,ETL_1,Number of positions,10
Property,ETL_1,Port,COM3
Property,ETL_1,Response detection,Ignore responses
Property,ETL_1,Shutdown-command,
Property,ETL_1,Shutdown-response,

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Cascade
Property,Core,Shutter,AAAOTF
Property,Core,Focus,ManualFocus
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# Objective
Label,Objective,5,Position-6
Label,Objective,4,Position-5
Label,Objective,3,Position-4
Label,Objective,2,Position-3
Label,Objective,1,Position-2
Label,Objective,0,Position-1
# LightPath
Label,LightPath,1,Side Port
Label,LightPath,0,Eye
# FilterCube
Label,FilterCube,5,Position-6
Label,FilterCube,4,Position-5
Label,FilterCube,3,Position-4
Label,FilterCube,2,Position-3
Label,FilterCube,1,Position-2
Label,FilterCube,0,Position-1
# TransmittedLamp
Label,TransmittedLamp,1,On
Label,TransmittedLamp,0,Off
# Wheel-A
Label,Wheel-A,9,Filter-9
Label,Wheel-A,8,Filter-8
Label,Wheel-A,7,Filter-7
Label,Wheel-A,6,Filter-6
Label,Wheel-A,5,Filter-5
Label,Wheel-A,4,Filter-4
Label,Wheel-A,3,Filter-3
Label,Wheel-A,2,Filter-2
Label,Wheel-A,1,Filter-1
Label,Wheel-A,0,Filter-0
# Wheel-C
Label,Wheel-C,9,Filter-9
Label,Wheel-C,8,Filter-8
Label,Wheel-C,7,Filter-7
Label,Wheel-C,6,Filter-6
Label,Wheel-C,5,Filter-5
Label,Wheel-C,4,Filter-4
Label,Wheel-C,3,Filter-3
Label,Wheel-C,2,Filter-2
Label,Wheel-C,1,Filter-1
Label,Wheel-C,0,Filter-0
# ETL_1
Label,ETL_1,9,State-9
Label,ETL_1,8,State-8
Label,ETL_1,7,State-7
Label,ETL_1,6,State-6
Label,ETL_1,5,State-5
Label,ETL_1,4,State-4
Label,ETL_1,3,State-3
Label,ETL_1,2,State-2
Label,ETL_1,1,State-1
Label,ETL_1,0,State-0

# Configuration presets
# Group: YFP_BF
# Preset: YFP_Excitation
ConfigGroup,YFP_BF,YFP_Excitation,OlympusHub,Control,Manual + Computer
ConfigGroup,YFP_BF,YFP_Excitation,TransmittedLamp,Voltage,2.9000
ConfigGroup,YFP_BF,YFP_Excitation,Wheel-A,Label,Filter-3
ConfigGroup,YFP_BF,YFP_Excitation,Wheel-A,State,3
ConfigGroup,YFP_BF,YFP_Excitation,Wheel-C,Label,Filter-3
ConfigGroup,YFP_BF,YFP_Excitation,Wheel-C,State,3
ConfigGroup,YFP_BF,YFP_Excitation,Core,Shutter,Shutter-A
ConfigGroup,YFP_BF,YFP_Excitation,FilterCube,Label,Position-3
ConfigGroup,YFP_BF,YFP_Excitation,FilterCube,State,2

# Preset: BF_transmitted
ConfigGroup,YFP_BF,BF_transmitted,OlympusHub,Control,Manual + Computer
ConfigGroup,YFP_BF,BF_transmitted,TransmittedLamp,Voltage,2.7000
ConfigGroup,YFP_BF,BF_transmitted,Wheel-A,Label,Filter-5
ConfigGroup,YFP_BF,BF_transmitted,Wheel-A,State,5
ConfigGroup,YFP_BF,BF_transmitted,Wheel-C,Label,Filter-3
ConfigGroup,YFP_BF,BF_transmitted,Wheel-C,State,3
ConfigGroup,YFP_BF,BF_transmitted,Core,Shutter,Shutter-B
ConfigGroup,YFP_BF,BF_transmitted,FilterCube,Label,Position-3
ConfigGroup,YFP_BF,BF_transmitted,FilterCube,State,2


# Group: GFP_RFP_BF
# Preset: GFP 20%
ConfigGroup,GFP_RFP_BF,GFP 20%,OlympusHub,Control,Manual + Computer
ConfigGroup,GFP_RFP_BF,GFP 20%,FilterCube,Label,Position-4
ConfigGroup,GFP_RFP_BF,GFP 20%,FilterCube,State,3
ConfigGroup,GFP_RFP_BF,GFP 20%,TransmittedLamp,Voltage,4.3000
ConfigGroup,GFP_RFP_BF,GFP 20%,ManualFocus,FarLimit,20.0000
ConfigGroup,GFP_RFP_BF,GFP 20%,Wheel-A,Label,Filter-4
ConfigGroup,GFP_RFP_BF,GFP 20%,Wheel-A,State,4
ConfigGroup,GFP_RFP_BF,GFP 20%,Wheel-C,Label,Filter-3
ConfigGroup,GFP_RFP_BF,GFP 20%,Wheel-C,State,3
ConfigGroup,GFP_RFP_BF,GFP 20%,Cascade,ClearMode,Pre-Sequence
ConfigGroup,GFP_RFP_BF,GFP 20%,Cascade,MultiplierGain,3824
ConfigGroup,GFP_RFP_BF,GFP 20%,Cascade,Offset,261
ConfigGroup,GFP_RFP_BF,GFP 20%,Cascade,ReadoutRate,5MHz 16bit
ConfigGroup,GFP_RFP_BF,GFP 20%,AAAOTF,Channel,2
ConfigGroup,GFP_RFP_BF,GFP 20%,AAAOTF,Power (% of max),20.0000
ConfigGroup,GFP_RFP_BF,GFP 20%,Core,Shutter,AAAOTF

# Preset: RFP_20%_TIRF
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,OlympusHub,Control,Manual + Computer
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,FilterCube,Label,Position-4
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,FilterCube,State,3
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,TransmittedLamp,Voltage,4.3000
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,ManualFocus,FarLimit,20.0000
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,Wheel-A,Label,Filter-6
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,Wheel-A,State,6
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,Wheel-C,Label,Filter-4
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,Wheel-C,State,4
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,Cascade,ClearMode,Pre-Sequence
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,Cascade,MultiplierGain,3900
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,Cascade,Offset,274
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,Cascade,ReadoutRate,5MHz 16bit
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,AAAOTF,Channel,4
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,AAAOTF,Power (% of max),19.8000
ConfigGroup,GFP_RFP_BF,RFP_20%_TIRF,Core,Shutter,AAAOTF

# Preset: RFP_100%
ConfigGroup,GFP_RFP_BF,RFP_100%,OlympusHub,Control,Manual + Computer
ConfigGroup,GFP_RFP_BF,RFP_100%,FilterCube,Label,Position-4
ConfigGroup,GFP_RFP_BF,RFP_100%,FilterCube,State,3
ConfigGroup,GFP_RFP_BF,RFP_100%,TransmittedLamp,Voltage,4.3000
ConfigGroup,GFP_RFP_BF,RFP_100%,ManualFocus,FarLimit,20.0000
ConfigGroup,GFP_RFP_BF,RFP_100%,Wheel-A,Label,Filter-6
ConfigGroup,GFP_RFP_BF,RFP_100%,Wheel-A,State,6
ConfigGroup,GFP_RFP_BF,RFP_100%,Wheel-C,Label,Filter-4
ConfigGroup,GFP_RFP_BF,RFP_100%,Wheel-C,State,4
ConfigGroup,GFP_RFP_BF,RFP_100%,Cascade,ClearMode,Pre-Sequence
ConfigGroup,GFP_RFP_BF,RFP_100%,Cascade,MultiplierGain,3900
ConfigGroup,GFP_RFP_BF,RFP_100%,Cascade,Offset,274
ConfigGroup,GFP_RFP_BF,RFP_100%,Cascade,ReadoutRate,5MHz 16bit
ConfigGroup,GFP_RFP_BF,RFP_100%,AAAOTF,Channel,4
ConfigGroup,GFP_RFP_BF,RFP_100%,AAAOTF,Power (% of max),100.0000
ConfigGroup,GFP_RFP_BF,RFP_100%,Core,Shutter,AAAOTF

# Preset:  GFP 100
ConfigGroup,GFP_RFP_BF, GFP 100,OlympusHub,Control,Manual + Computer
ConfigGroup,GFP_RFP_BF, GFP 100,FilterCube,Label,Position-4
ConfigGroup,GFP_RFP_BF, GFP 100,FilterCube,State,3
ConfigGroup,GFP_RFP_BF, GFP 100,TransmittedLamp,Voltage,4.3000
ConfigGroup,GFP_RFP_BF, GFP 100,ManualFocus,FarLimit,20.0000
ConfigGroup,GFP_RFP_BF, GFP 100,Wheel-A,Label,Filter-4
ConfigGroup,GFP_RFP_BF, GFP 100,Wheel-A,State,4
ConfigGroup,GFP_RFP_BF, GFP 100,Wheel-C,Label,Filter-3
ConfigGroup,GFP_RFP_BF, GFP 100,Wheel-C,State,3
ConfigGroup,GFP_RFP_BF, GFP 100,Cascade,ClearMode,Pre-Sequence
ConfigGroup,GFP_RFP_BF, GFP 100,Cascade,MultiplierGain,3824
ConfigGroup,GFP_RFP_BF, GFP 100,Cascade,Offset,261
ConfigGroup,GFP_RFP_BF, GFP 100,Core,Shutter,AAAOTF
ConfigGroup,GFP_RFP_BF, GFP 100,Cascade,ReadoutRate,5MHz 16bit
ConfigGroup,GFP_RFP_BF, GFP 100,AAAOTF,Channel,2
ConfigGroup,GFP_RFP_BF, GFP 100,AAAOTF,Power (% of max),100.0000

# Preset: BF
ConfigGroup,GFP_RFP_BF,BF,OlympusHub,Control,Manual + Computer
ConfigGroup,GFP_RFP_BF,BF,FilterCube,Label,Position-4
ConfigGroup,GFP_RFP_BF,BF,FilterCube,State,3
ConfigGroup,GFP_RFP_BF,BF,TransmittedLamp,Voltage,4.1000
ConfigGroup,GFP_RFP_BF,BF,ManualFocus,FarLimit,20.0000
ConfigGroup,GFP_RFP_BF,BF,Wheel-A,Label,Filter-4
ConfigGroup,GFP_RFP_BF,BF,Wheel-A,State,4
ConfigGroup,GFP_RFP_BF,BF,Wheel-C,Label,Filter-1
ConfigGroup,GFP_RFP_BF,BF,Wheel-C,State,1
ConfigGroup,GFP_RFP_BF,BF,Cascade,ClearMode,Pre-Sequence
ConfigGroup,GFP_RFP_BF,BF,Cascade,MultiplierGain,1
ConfigGroup,GFP_RFP_BF,BF,Cascade,Offset,275
ConfigGroup,GFP_RFP_BF,BF,Core,Shutter,Shutter-B
ConfigGroup,GFP_RFP_BF,BF,Cascade,ReadoutRate,10MHz 16bit
ConfigGroup,GFP_RFP_BF,BF,AAAOTF,Channel,1
ConfigGroup,GFP_RFP_BF,BF,AAAOTF,Power (% of max),100.0000

# Preset: RFP_22%
ConfigGroup,GFP_RFP_BF,RFP_22%,OlympusHub,Control,Manual + Computer
ConfigGroup,GFP_RFP_BF,RFP_22%,FilterCube,Label,Position-4
ConfigGroup,GFP_RFP_BF,RFP_22%,FilterCube,State,3
ConfigGroup,GFP_RFP_BF,RFP_22%,TransmittedLamp,Voltage,4.3000
ConfigGroup,GFP_RFP_BF,RFP_22%,ManualFocus,FarLimit,20.0000
ConfigGroup,GFP_RFP_BF,RFP_22%,Wheel-A,Label,Filter-6
ConfigGroup,GFP_RFP_BF,RFP_22%,Wheel-A,State,6
ConfigGroup,GFP_RFP_BF,RFP_22%,Wheel-C,Label,Filter-4
ConfigGroup,GFP_RFP_BF,RFP_22%,Wheel-C,State,4
ConfigGroup,GFP_RFP_BF,RFP_22%,Cascade,ClearMode,Pre-Sequence
ConfigGroup,GFP_RFP_BF,RFP_22%,Cascade,MultiplierGain,3900
ConfigGroup,GFP_RFP_BF,RFP_22%,Cascade,Offset,274
ConfigGroup,GFP_RFP_BF,RFP_22%,Core,Shutter,AAAOTF
ConfigGroup,GFP_RFP_BF,RFP_22%,Cascade,ReadoutRate,5MHz 16bit
ConfigGroup,GFP_RFP_BF,RFP_22%,AAAOTF,Channel,4
ConfigGroup,GFP_RFP_BF,RFP_22%,AAAOTF,Power (% of max),22.2000


# Group: Brightfield_CFP
# Preset: Shutter-B
ConfigGroup,Brightfield_CFP,Shutter-B,Core,Shutter,Shutter-B

# Preset: Shutter-A
ConfigGroup,Brightfield_CFP,Shutter-A,Core,Shutter,Shutter-A


# Group: Collimation_Focus
# Preset: Collimation
ConfigGroup,Collimation_Focus,Collimation,AAAOTF,Channel,3
ConfigGroup,Collimation_Focus,Collimation,Core,Shutter,AAAOTF

# Preset: Focus
ConfigGroup,Collimation_Focus,Focus,AAAOTF,Channel,4
ConfigGroup,Collimation_Focus,Focus,Core,Shutter,AAAOTF


# Group: Laser_CFP_YFP
# Preset: YFP
ConfigGroup,Laser_CFP_YFP,YFP,OlympusHub,Control,Manual + Computer
ConfigGroup,Laser_CFP_YFP,YFP,FilterCube,Label,Position-6
ConfigGroup,Laser_CFP_YFP,YFP,Wheel-C,Label,Filter-3
ConfigGroup,Laser_CFP_YFP,YFP,AAAOTF,Channel,3
ConfigGroup,Laser_CFP_YFP,YFP,Core,Shutter,AAAOTF

# Preset: CFP
ConfigGroup,Laser_CFP_YFP,CFP,OlympusHub,Control,Manual + Computer
ConfigGroup,Laser_CFP_YFP,CFP,Wheel-C,Label,Filter-5
ConfigGroup,Laser_CFP_YFP,CFP,Core,Shutter,AAAOTF
ConfigGroup,Laser_CFP_YFP,CFP,FilterCube,Label,Position-6
ConfigGroup,Laser_CFP_YFP,CFP,AAAOTF,Channel,1

# Preset: RFP
ConfigGroup,Laser_CFP_YFP,RFP,OlympusHub,Control,Manual + Computer
ConfigGroup,Laser_CFP_YFP,RFP,FilterCube,Label,Position-6
ConfigGroup,Laser_CFP_YFP,RFP,Wheel-C,Label,Filter-4
ConfigGroup,Laser_CFP_YFP,RFP,AAAOTF,Channel,4
ConfigGroup,Laser_CFP_YFP,RFP,Core,Shutter,AAAOTF

# Preset: FRET
ConfigGroup,Laser_CFP_YFP,FRET,OlympusHub,Control,Manual + Computer
ConfigGroup,Laser_CFP_YFP,FRET,Wheel-C,Label,Filter-3
ConfigGroup,Laser_CFP_YFP,FRET,Core,Shutter,AAAOTF
ConfigGroup,Laser_CFP_YFP,FRET,FilterCube,Label,Position-6
ConfigGroup,Laser_CFP_YFP,FRET,AAAOTF,Channel,1


# Group: Brightfield_epi_CFPYFP
# Preset: CFP
ConfigGroup,Brightfield_epi_CFPYFP,CFP,OlympusHub,Control,Manual + Computer
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Wheel-A,Label,Filter-8
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Wheel-A,State,8
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Wheel-C,Label,Filter-1
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Wheel-C,State,1
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Shutter-A,State,1
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Shutter-B,State,0
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Cascade,Exposure,200.0000
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Cascade,MultiplierGain,3900

# Preset: Brightfield
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,OlympusHub,Control,Manual + Computer
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Wheel-A,Label,Filter-8
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Wheel-A,State,8
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Wheel-C,Label,Filter-1
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Wheel-C,State,1
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Shutter-A,State,0
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Shutter-B,State,1
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Cascade,Exposure,200.0000
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Cascade,MultiplierGain,3900


# Group: CFP_YFP_BF
# Preset: CFPx YFPm_LED
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,OlympusHub,Control,Manual + Computer
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,FilterCube,Label,Position-6
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,FilterCube,State,5
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,ManualFocus,FarLimit,0.0100
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,ManualFocus,FocusSensitivity,100
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,ManualFocus,FocusWheel,Off
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,ManualFocus,NearLimit,30000.0000
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Wheel-A,Busy,0
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Wheel-A,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Wheel-A,Label,Filter-8
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Wheel-A,Speed,3
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Wheel-A,State,8
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Wheel-C,Busy,0
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Wheel-C,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Wheel-C,Label,Filter-3
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Wheel-C,Speed,3
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Wheel-C,State,3
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Shutter-A,Mode,Fast
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Cascade,ClearMode,Pre-Sequence
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Cascade,Exposure,10.0000
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Cascade,Port,Multiplication Gain
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Cascade,MultiplierGain,3900
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Core,Shutter,Shutter-A
ConfigGroup,CFP_YFP_BF,CFPx YFPm_LED,Cascade,ReadoutRate,5MHz 16bit

# Preset: BF-LEDcube
ConfigGroup,CFP_YFP_BF,BF-LEDcube,OlympusHub,Control,Manual + Computer
ConfigGroup,CFP_YFP_BF,BF-LEDcube,FilterCube,Label,Position-6
ConfigGroup,CFP_YFP_BF,BF-LEDcube,FilterCube,State,5
ConfigGroup,CFP_YFP_BF,BF-LEDcube,ManualFocus,FarLimit,0.0100
ConfigGroup,CFP_YFP_BF,BF-LEDcube,ManualFocus,FocusSensitivity,100
ConfigGroup,CFP_YFP_BF,BF-LEDcube,ManualFocus,FocusWheel,Off
ConfigGroup,CFP_YFP_BF,BF-LEDcube,ManualFocus,NearLimit,30000.0000
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Wheel-A,Busy,0
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Wheel-A,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Wheel-A,Label,Filter-8
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Wheel-A,Speed,3
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Wheel-A,State,8
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Wheel-C,Busy,0
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Wheel-C,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Wheel-C,Label,Filter-3
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Wheel-C,Speed,3
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Wheel-C,State,3
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Shutter-A,Mode,Fast
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Cascade,ClearMode,Pre-Sequence
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Cascade,Exposure,10.0000
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Cascade,MultiplierGain,1
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Cascade,Port,Multiplication Gain
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Core,Shutter,Shutter-B
ConfigGroup,CFP_YFP_BF,BF-LEDcube,Cascade,ReadoutRate,5MHz 16bit

# Preset: YFPx YFPm-LED 
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,OlympusHub,Control,Manual + Computer
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,FilterCube,Label,Position-6
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,FilterCube,State,5
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,ManualFocus,FarLimit,0.0100
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,ManualFocus,FocusSensitivity,100
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,ManualFocus,FocusWheel,Off
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,ManualFocus,NearLimit,30000.0000
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Wheel-A,Busy,0
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Wheel-A,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Wheel-A,Label,Filter-3
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Wheel-A,Speed,3
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Wheel-A,State,3
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Wheel-C,Busy,0
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Wheel-C,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Wheel-C,Label,Filter-3
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Wheel-C,Speed,3
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Wheel-C,State,3
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Shutter-A,Mode,Fast
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Cascade,ClearMode,Pre-Sequence
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Cascade,Exposure,10.0000
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Cascade,Port,Multiplication Gain
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Cascade,MultiplierGain,3900
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Core,Shutter,Shutter-A
ConfigGroup,CFP_YFP_BF,YFPx YFPm-LED ,Cascade,ReadoutRate,5MHz 16bit

# Preset: CFPx CFPm-LED
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,OlympusHub,Control,Manual + Computer
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,FilterCube,Label,Position-6
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,FilterCube,State,5
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,ManualFocus,FarLimit,0.0100
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,ManualFocus,FocusSensitivity,100
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,ManualFocus,FocusWheel,Off
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,ManualFocus,NearLimit,30000.0000
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Wheel-A,Busy,0
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Wheel-A,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Wheel-A,Label,Filter-8
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Wheel-A,Speed,3
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Wheel-A,State,8
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Wheel-C,Busy,0
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Wheel-C,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Wheel-C,Label,Filter-5
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Wheel-C,Speed,3
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Wheel-C,State,5
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Shutter-A,Mode,Fast
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Cascade,ClearMode,Pre-Sequence
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Cascade,Exposure,10.0000
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Cascade,Port,Multiplication Gain
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Cascade,MultiplierGain,3900
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Core,Shutter,Shutter-A
ConfigGroup,CFP_YFP_BF,CFPx CFPm-LED,Cascade,ReadoutRate,5MHz 16bit

# Preset: FRET_GEMINI
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,OlympusHub,Control,Manual + Computer
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,FilterCube,Label,Position-6
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,FilterCube,State,5
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,ManualFocus,FarLimit,0.0100
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,ManualFocus,FocusSensitivity,100
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,ManualFocus,FocusWheel,Off
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,ManualFocus,NearLimit,30000.0000
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Wheel-A,Busy,0
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Wheel-A,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Wheel-A,Label,Filter-8
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Wheel-A,Speed,3
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Wheel-A,State,8
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Wheel-C,Busy,0
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Wheel-C,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Wheel-C,Label,Filter-1
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Wheel-C,Speed,3
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Wheel-C,State,1
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Shutter-A,Mode,Fast
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Cascade,ClearMode,Pre-Sequence
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Cascade,Exposure,10.0000
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Cascade,MultiplierGain,3900
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Cascade,Port,Multiplication Gain
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Cascade,ReadoutRate,5MHz 16bit
ConfigGroup,CFP_YFP_BF,FRET_GEMINI,Core,Shutter,Shutter-A



# PixelSize settings

